<?xml version="1.0"?>
<Recipe xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" FragmentVersion="2.1.2.1">
  <Protocol>
    <ChemistryRef ChemistryName="OnBoardClusterGeneration" />
    <ChemistryRef ChemistryName="FirstReadPreparation" />
    <ReadRef ReadName="FirstRead" />
    <ChemistryRef ChemistryName="EndDeblock" />
    <ChemistryRef ChemistryName="Index1Preparation" />
    <ReadRef ReadName="IndexRead1" />
    <ChemistryRef ChemistryName="EndDeblock" />
    <ChemistryRef ChemistryName="Deprotection" />
    <ChemistryRef ChemistryName="PairedEndTurnaround" />
    <ChemistryRef ChemistryName="SecondReadPreparation" />
    <ReadRef ReadName="SecondRead" />
    <ChemistryRef ChemistryName="End" />
  </Protocol>
  <ChemistryDefinitions>
    <ChemistryDefinition Name="OnBoardClusterGeneration">
      <ChemistryStep Description="Flow Check" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="1000" />
      </ChemistryStep>
      <ChemistryStep Description="Rehydration" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="500" Solution="0" DispenseRate="15000" Volume="500" />
      </ChemistryStep>
      <ChemistryStep Description="Initial Prime" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <Temp Duration="0" Temperature="50" />
        <FixedWaitForTemp Threshold="1" WarnLogWait="180000" TotalWait="300000" SamplingRate="1000" NumStableSteps="3" />
        <PumpToFlowcell ReagentName="BB1" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="500" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
        <PumpToFlowcell ReagentName="BDR" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="55" />
        <Wait Duration="1500" />
        <PumpToFlowcell ReagentName="BMS" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="35" />
        <Wait Duration="1500" />
        <PumpToFlowcell ReagentName="BB3" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="30" />
        <Wait Duration="1500" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="1000" Solution="0" DispenseRate="15000" Volume="250" />
        <PumpToFlowcell ReagentName="TMP" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="35" />
        <Dispense DispenseRate="15000" Volume="0" />
      </ChemistryStep>
      <ChemistryStep Description="Template DNA Hybridization" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="TMP" AspirationRate="3500" Solution="0" DispenseRate="15000" Volume="120" />
        <Wait Duration="90000" />
        <PumpToFlowcell ReagentName="TMP" AspirationRate="3500" Solution="0" DispenseRate="15000" Volume="119" />
        <Wait Duration="90000" />
        <DispenseToFlowcell ReagentName="TMP" Solution="0" Volume="59" DispenseRate="3500" />
        <Wait Duration="120000" />
        <DispenseToFlowcell ReagentName="TMP" Solution="0" Volume="95" DispenseRate="3500" />
        <Wait Duration="120000" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="250" Solution="0" DispenseRate="15000" Volume="233" />
        <Wait Duration="18000" />
      </ChemistryStep>
      <ChemistryStep Description="Extension-Amplification" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BMS" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="200" />
        <Wait Duration="5000" />
        <PumpToFlowcell ReagentName="BMS" AspirationRate="250" Solution="0" DispenseRate="15000" Volume="25" />
        <Wait Duration="5000" />
        <PumpToFlowcell ReagentName="BMS" AspirationRate="250" Solution="0" DispenseRate="15000" Volume="25" />
        <Wait Duration="5000" />
        <PumpToFlowcell ReagentName="BMS" AspirationRate="250" Solution="0" DispenseRate="15000" Volume="25" />
        <Wait Duration="5000" />
        <PumpToFlowcell ReagentName="BMS" AspirationRate="250" Solution="0" DispenseRate="15000" Volume="25" />
        <Wait Duration="90000" />
      </ChemistryStep>
      <ChemistryStep Description="Amplification" Repeat="40" IsDeblock="false" IsIncorporation="false">
        <ChemistryGroup Description="Group" Repeat="1" IsDeblock="false" IsIncorporation="false">
          <PumpToFlowcell ReagentName="BDR" AspirationRate="600" Solution="0" DispenseRate="2500" Volume="82" />
          <PumpToFlowcell ReagentName="BB3" AspirationRate="600" Solution="0" DispenseRate="2500" Volume="82" />
          <PumpToFlowcell ReagentName="BMS" AspirationRate="600" Solution="0" DispenseRate="2500" Volume="200" />
          <Dispense DispenseRate="7500" Volume="0" />
        </ChemistryGroup>
      </ChemistryStep>
      <ChemistryStep Description="Amplification Wash" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
        <Dispense DispenseRate="15000" Volume="0" />
      </ChemistryStep>
      <ChemistryStep Description="Conditioning" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <Temp Duration="0" Temperature="40" />
        <FixedWaitForTemp Threshold="1" WarnLogWait="180000" TotalWait="345000" SamplingRate="1000" NumStableSteps="3" />
        <PumpToFlowcell ReagentName="EXT" AspirationRate="3500" Solution="0" DispenseRate="2500" Volume="150" />
        <Wait Duration="150000" />
        <PumpToFlowcell ReagentName="EXT" AspirationRate="3500" Solution="0" DispenseRate="2500" Volume="34" />
        <Wait Duration="150000" />
        <PumpToFlowcell ReagentName="EXT" AspirationRate="3500" Solution="0" DispenseRate="2500" Volume="34" />
        <Wait Duration="250000" />
        <PumpToFlowcell ReagentName="EXT" AspirationRate="3500" Solution="0" DispenseRate="2500" Volume="34" />
        <Wait Duration="250000" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="2000" Solution="0" DispenseRate="2500" Volume="250" />
        <PumpToFlowcell ReagentName="BB1" AspirationRate="2000" Solution="0" DispenseRate="2500" Volume="250" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="2000" Solution="0" DispenseRate="2500" Volume="250" />
        <Dispense DispenseRate="15000" Volume="0" />
      </ChemistryStep>
      <ChemistryStep Description="Normalization" Repeat="3" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BDR" AspirationRate="200" Solution="0" DispenseRate="2500" Volume="82" />
        <PumpToFlowcell ReagentName="BB3" AspirationRate="200" Solution="0" DispenseRate="2500" Volume="82" />
        <PumpToFlowcell ReagentName="BMS" AspirationRate="200" Solution="0" DispenseRate="2500" Volume="82" />
        <Dispense DispenseRate="7500" Volume="0" />
        <Wait Duration="60000" />
        <PumpToFlowcell ReagentName="BMS" AspirationRate="200" Solution="0" DispenseRate="2500" Volume="36" />
        <PumpToFlowcell ReagentName="BMS" AspirationRate="200" Solution="0" DispenseRate="2500" Volume="82" />
        <Dispense DispenseRate="7500" Volume="0" />
        <Wait Duration="60000" />
      </ChemistryStep>
      <ChemistryStep Description="Amplification Wash" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
        <Dispense DispenseRate="15000" Volume="0" />
      </ChemistryStep>
      <ChemistryStep Description="Linearisation" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BLM1" AspirationRate="3500" Solution="0" DispenseRate="7500" Volume="130" />
        <Wait Duration="120000" />
        <PumpToFlowcell ReagentName="BLM1" AspirationRate="3500" Solution="0" DispenseRate="7500" Volume="120" />
        <Wait Duration="120000" />
        <DispenseToFlowcell ReagentName="BLM1" Solution="0" Volume="60" DispenseRate="3500" />
        <Wait Duration="60000" />
        <PumpToFlowcell ReagentName="BLM1" AspirationRate="3500" Solution="0" DispenseRate="7500" Volume="120" />
        <Wait Duration="120000" />
        <DispenseToFlowcell ReagentName="BLM1" Solution="0" Volume="60" DispenseRate="3500" />
        <Wait Duration="60000" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="250" />
      </ChemistryStep>
      <ChemistryStep Description="SBS Prime" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="IBM" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="500" />
        <PumpToFlowcell ReagentName="SBM" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="500" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="500" />
        <PumpToFlowcell ReagentName="CBM" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="500" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="500" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="SBSPrime">
      <ChemistryStep Description="SBS Prime" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="IBM" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="500" />
        <PumpToFlowcell ReagentName="SBM" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="500" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="500" />
        <PumpToFlowcell ReagentName="CBM" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="500" />
        <PumpToFlowcell ReagentName="BB1" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="500" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="FirstReadPreparation">
      <ChemistryStep Description="Denaturation-Hybridization" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BDR" AspirationRate="250" Solution="0" DispenseRate="15000" Volume="200" />
        <Temp Duration="0" Temperature="60" />
        <FixedWaitForTemp Threshold="1" WarnLogWait="180000" TotalWait="345000" SamplingRate="1000" NumStableSteps="3" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="150" />
        <PumpToFlowcell ReagentName="BP10" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="51" />
        <PumpToFlowcell ReagentName="BP10" AspirationRate="250" Solution="0" DispenseRate="15000" Volume="207" />
        <Wait Duration="60000" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="FirstBaseRead1">
      <ChemistryStep Description="Incorporation" Repeat="1" IsDeblock="false" IsIncorporation="true">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="140" />
        <PumpToFlowcell ReagentName="IBM" AspirationRate="3500" Solution="0" DispenseRate="7500" Volume="1000" />
        <Wait Duration="50000" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="140" />
        <PumpToFlowcell ReagentName="BB1" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="1000" />
        <PumpToFlowcell ReagentName="SBM" AspirationRate="1500" Solution="0" DispenseRate="7500" Volume="1000" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="SecondBaseRead1">
      <ChemistryStep Description="Deblock" Repeat="1" IsDeblock="true" IsIncorporation="false">
        <Temp Duration="0" Temperature="60" />
        <FixedWaitForTemp Threshold="1" WarnLogWait="0" TotalWait="0" SamplingRate="1000" NumStableSteps="3" />
        <Dispense DispenseRate="15000" Volume="0" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="100" />
        <PumpToFlowcell ReagentName="CBM" AspirationRate="3500" Solution="0" DispenseRate="7500" Volume="1000" />
        <Wait Duration="10000" />
      </ChemistryStep>
      <ChemistryStep Description="Buffer Wash" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="96" />
        <PumpToFlowcell ReagentName="BB1" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="186" />
        <DispenseToFlowcell ReagentName="BB1" Solution="0" Volume="102" DispenseRate="3100" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="140" />
      </ChemistryStep>
      <ChemistryStep Description="Incorporation" Repeat="1" IsDeblock="false" IsIncorporation="true">
        <Dispense DispenseRate="15000" Volume="0" />
        <PumpToFlowcell ReagentName="IBM" AspirationRate="3500" Solution="0" DispenseRate="7500" Volume="190" />
        <Wait Duration="30000" />
        <DispenseToFlowcell ReagentName="IBM" Solution="0" Volume="20" DispenseRate="3500" />
        <Wait Duration="10000" />
        <DispenseToFlowcell ReagentName="IBM" Solution="0" Volume="20" DispenseRate="3500" />
        <Wait Duration="10000" />
        <DispenseToFlowcell ReagentName="IBM" Solution="0" Volume="93" DispenseRate="3500" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="2500" Solution="0" DispenseRate="7500" Volume="140" />
        <PumpToFlowcell ReagentName="SBM" AspirationRate="2500" Solution="0" DispenseRate="7500" Volume="200" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="FirstBase">
      <ChemistryStep Description="Incorporation" Repeat="1" IsDeblock="false" IsIncorporation="true">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="140" />
        <PumpToFlowcell ReagentName="IBM" AspirationRate="3500" Solution="0" DispenseRate="7500" Volume="190" />
        <Wait Duration="50000" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="140" />
        <PumpToFlowcell ReagentName="BB1" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="140" />
        <PumpToFlowcell ReagentName="SBM" AspirationRate="1500" Solution="0" DispenseRate="7500" Volume="190" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="CompleteCycle">
      <ChemistryStep Description="Deblock" Repeat="1" IsDeblock="true" IsIncorporation="false">
        <Temp Duration="0" Temperature="60" />
        <FixedWaitForTemp Threshold="1" WarnLogWait="0" TotalWait="0" SamplingRate="1000" NumStableSteps="3" />
        <DispenseToFlowcell ReagentName="SBM" Solution="0" Volume="120" DispenseRate="3500" />
        <Dispense DispenseRate="15000" Volume="0" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="100" />
        <PumpToFlowcell ReagentName="CBM" AspirationRate="3500" Solution="0" DispenseRate="7500" Volume="145" />
        <Wait Duration="10000" />
        <DispenseToFlowcell ReagentName="CBM" Solution="0" Volume="20" DispenseRate="3500" />
        <DispenseToFlowcell ReagentName="CBM" Solution="0" Volume="81" DispenseRate="3500" />
      </ChemistryStep>
      <ChemistryStep Description="Buffer Wash" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="96" />
        <PumpToFlowcell ReagentName="BB1" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="186" />
        <DispenseToFlowcell ReagentName="BB1" Solution="0" Volume="102" DispenseRate="3100" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="140" />
      </ChemistryStep>
      <ChemistryStep Description="Incorporation" Repeat="1" IsDeblock="false" IsIncorporation="true">
        <Dispense DispenseRate="15000" Volume="0" />
        <PumpToFlowcell ReagentName="IBM" AspirationRate="3500" Solution="0" DispenseRate="7500" Volume="190" />
        <Wait Duration="30000" />
        <DispenseToFlowcell ReagentName="IBM" Solution="0" Volume="20" DispenseRate="3500" />
        <Wait Duration="10000" />
        <DispenseToFlowcell ReagentName="IBM" Solution="0" Volume="20" DispenseRate="3500" />
        <Wait Duration="10000" />
        <DispenseToFlowcell ReagentName="IBM" Solution="0" Volume="93" DispenseRate="3500" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="2500" Solution="0" DispenseRate="7500" Volume="140" />
        <PumpToFlowcell ReagentName="SBM" AspirationRate="2500" Solution="0" DispenseRate="7500" Volume="200" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="EndDeblock">
      <ChemistryStep Description="Deblock" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="175" />
        <PumpToFlowcell ReagentName="CBM" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="145" />
        <Wait Duration="5000" />
      </ChemistryStep>
      <ChemistryStep Description="Buffer Wash" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="175" />
        <PumpToFlowcell ReagentName="BB1" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="175" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="EndDeblockRehyb">
      <ChemistryStep Description="Deblock" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <Temp Duration="0" Temperature="60" />
        <FixedWaitForTemp Threshold="1" WarnLogWait="180000" TotalWait="345000" SamplingRate="1000" NumStableSteps="3" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="175" />
        <PumpToFlowcell ReagentName="CBM" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="145" />
        <Wait Duration="5000" />
      </ChemistryStep>
      <ChemistryStep Description="Buffer Wash" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="175" />
        <PumpToFlowcell ReagentName="BB1" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="175" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="Deprotection">
      <ChemistryStep Description="Deprotection" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BDR" AspirationRate="120" Solution="0" DispenseRate="15000" Volume="100" />
        <Wait Duration="150000" />
        <PumpToFlowcell ReagentName="BDR" AspirationRate="120" Solution="0" DispenseRate="15000" Volume="100" />
        <Wait Duration="150000" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="300" />
        <Temp Duration="0" Temperature="40" />
        <FixedWaitForTemp Threshold="1" WarnLogWait="300000" TotalWait="300000" SamplingRate="1000" NumStableSteps="3" />
        <Dispense DispenseRate="15000" Volume="0" />
        <PumpToFlowcell ReagentName="BRM" AspirationRate="2000" Solution="0" DispenseRate="2500" Volume="125" />
        <PumpToFlowcell ReagentName="BRM" AspirationRate="250" Solution="0" DispenseRate="2500" Volume="125" />
        <Wait Duration="150000" />
        <PumpToFlowcell ReagentName="BRM" AspirationRate="120" Solution="0" DispenseRate="2500" Volume="42" />
        <Wait Duration="150000" />
        <PumpToFlowcell ReagentName="BRM" AspirationRate="120" Solution="0" DispenseRate="2500" Volume="42" />
        <Wait Duration="150000" />
        <PumpToFlowcell ReagentName="BRM" AspirationRate="120" Solution="0" DispenseRate="2500" Volume="42" />
        <Wait Duration="150000" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="150" />
        <PumpToFlowcell ReagentName="BB1" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="150" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="150" />
        <Dispense DispenseRate="15000" Volume="0" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="PairedEndTurnaround">
      <ChemistryStep Description="HeatRamp" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <Temp Duration="0" Temperature="50" />
        <FixedWaitForTemp Threshold="1" WarnLogWait="180000" TotalWait="300000" SamplingRate="1000" NumStableSteps="3" />
      </ChemistryStep>
      <ChemistryStep Description="Resynthesis" Repeat="12" IsDeblock="false" IsIncorporation="false">
        <ChemistryGroup Description="Group" Repeat="1" IsDeblock="false" IsIncorporation="false">
          <PumpToFlowcell ReagentName="BDR" AspirationRate="600" Solution="0" DispenseRate="2500" Volume="102" />
          <PumpToFlowcell ReagentName="BB3" AspirationRate="600" Solution="0" DispenseRate="2500" Volume="102" />
          <PumpToFlowcell ReagentName="BMS" AspirationRate="600" Solution="0" DispenseRate="2500" Volume="249" />
          <Dispense DispenseRate="7500" Volume="0" />
        </ChemistryGroup>
      </ChemistryStep>
      <ChemistryStep Description="Amplification Wash" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
        <Dispense DispenseRate="15000" Volume="0" />
      </ChemistryStep>
      <ChemistryStep Description="Conditioning" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <Temp Duration="0" Temperature="40" />
        <FixedWaitForTemp Threshold="1" WarnLogWait="180000" TotalWait="345000" SamplingRate="1000" NumStableSteps="3" />
        <PumpToFlowcell ReagentName="EXT" AspirationRate="3500" Solution="0" DispenseRate="2500" Volume="150" />
        <Wait Duration="150000" />
        <PumpToFlowcell ReagentName="EXT" AspirationRate="3500" Solution="0" DispenseRate="2500" Volume="34" />
        <Wait Duration="150000" />
        <PumpToFlowcell ReagentName="EXT" AspirationRate="3500" Solution="0" DispenseRate="2500" Volume="34" />
        <Wait Duration="250000" />
        <PumpToFlowcell ReagentName="EXT" AspirationRate="3500" Solution="0" DispenseRate="2500" Volume="34" />
        <Wait Duration="250000" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="2000" Solution="0" DispenseRate="2500" Volume="250" />
        <PumpToFlowcell ReagentName="BB1" AspirationRate="2000" Solution="0" DispenseRate="2500" Volume="250" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="2000" Solution="0" DispenseRate="2500" Volume="250" />
        <Dispense DispenseRate="15000" Volume="0" />
      </ChemistryStep>
      <ChemistryStep Description="Normalization" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BMS" AspirationRate="200" Solution="0" DispenseRate="2500" Volume="82" />
        <Dispense DispenseRate="7500" Volume="0" />
        <Wait Duration="30000" />
        <PumpToFlowcell ReagentName="BMS" AspirationRate="200" Solution="0" DispenseRate="2500" Volume="36" />
        <PumpToFlowcell ReagentName="BMS" AspirationRate="200" Solution="0" DispenseRate="2500" Volume="82" />
        <Dispense DispenseRate="7500" Volume="0" />
        <Wait Duration="30000" />
      </ChemistryStep>
      <ChemistryStep Description="Amplification Wash" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
        <PumpToFlowcell ReagentName="SBM" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
        <Dispense DispenseRate="15000" Volume="0" />
      </ChemistryStep>
      <ChemistryStep Description="Linearisation 2" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BLM2" AspirationRate="3500" Solution="0" DispenseRate="7500" Volume="130" />
        <Wait Duration="120000" />
        <PumpToFlowcell ReagentName="BLM2" AspirationRate="3500" Solution="0" DispenseRate="7500" Volume="120" />
        <Wait Duration="120000" />
        <DispenseToFlowcell ReagentName="BLM2" Solution="0" Volume="60" DispenseRate="3500" />
        <Wait Duration="120000" />
        <PumpToFlowcell ReagentName="BLM2" AspirationRate="3500" Solution="0" DispenseRate="7500" Volume="120" />
        <Wait Duration="120000" />
        <DispenseToFlowcell ReagentName="BLM2" Solution="0" Volume="60" DispenseRate="3500" />
        <Wait Duration="120000" />
        <PumpToFlowcell ReagentName="SBM" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="250" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="SecondReadPreparation">
      <ChemistryStep Description="SecondReadPreparation" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BDR" AspirationRate="120" Solution="0" DispenseRate="15000" Volume="250" />
        <Temp Duration="0" Temperature="60" />
        <FixedWaitForTemp Threshold="1" WarnLogWait="180000" TotalWait="345000" SamplingRate="1000" NumStableSteps="3" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
        <PumpToFlowcell ReagentName="BP11" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="59" />
        <PumpToFlowcell ReagentName="BP11" AspirationRate="250" Solution="0" DispenseRate="15000" Volume="258" />
        <Wait Duration="60000" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="EndRead">
      <ChemistryStep Description="Safe State" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB1" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="500" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="Index1Preparation">
      <ChemistryStep Description="Index1Preparation" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BDR" AspirationRate="120" Solution="0" DispenseRate="15000" Volume="200" />
        <Wait Duration="60000" />
        <PumpToFlowcell ReagentName="BP14" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="51" />
        <PumpToFlowcell ReagentName="BP14" AspirationRate="250" Solution="0" DispenseRate="15000" Volume="207" />
        <Wait Duration="60000" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="Index2Preparation">
      <ChemistryStep Description="Index2Preparation" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BDR" AspirationRate="120" Solution="0" DispenseRate="15000" Volume="200" />
        <Temp Duration="0" Temperature="60" />
        <FixedWaitForTemp Threshold="1" WarnLogWait="180000" TotalWait="345000" SamplingRate="1000" NumStableSteps="3" />
        <Wait Duration="60000" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
        <PumpToFlowcell ReagentName="BP14" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="51" />
        <PumpToFlowcell ReagentName="BP14" AspirationRate="250" Solution="0" DispenseRate="15000" Volume="207" />
        <Wait Duration="60000" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="ResumeChemistry">
      <ChemistryStep Description="Prepare for scanning" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <Temp Duration="0" Temperature="60" />
        <FixedWaitForTemp Threshold="1" WarnLogWait="0" TotalWait="0" SamplingRate="1000" NumStableSteps="3" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
        <Wait Duration="15000" />
        <PumpToFlowcell ReagentName="SBM" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="200" />
        <Wait Duration="5000" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="PauseChemistry">
      <ChemistryStep Description="Pause flowcell" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <Temp Duration="0" Temperature="60" />
        <FixedWaitForTemp Threshold="1" WarnLogWait="0" TotalWait="0" SamplingRate="1000" NumStableSteps="3" />
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="250" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="WaitAndFlushScanMix">
      <ChemistryStep Description="WaitAndFlushScanMix" Repeat="1" IsDeblock="false" IsIncorporation="true">
        <WaitForImaging />
        <PumpToFlowcell ReagentName="SBM" AspirationRate="2500" Solution="0" DispenseRate="7500" Volume="200" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="FlushBB2">
      <ChemistryStep Description="FlushBB2" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB2" AspirationRate="3100" Solution="0" DispenseRate="7500" Volume="250" />
      </ChemistryStep>
    </ChemistryDefinition>
    <ChemistryDefinition Name="End">
      <ChemistryStep Description="Safe State" Repeat="1" IsDeblock="false" IsIncorporation="false">
        <PumpToFlowcell ReagentName="BB1" AspirationRate="3100" Solution="0" DispenseRate="15000" Volume="500" />
      </ChemistryStep>
    </ChemistryDefinition>
  </ChemistryDefinitions>
  <ReadDefinitions>
    <ReadDefinition IsIndexed="False" Name="FirstRead">
      <CreateFocusModel ChemistryName="FirstBaseRead1" PostImagingChemistryName="FlushBB2" MinimumRemainingVolume="0" Cycles="0" />
      <FirstBase ChemistryName="WaitAndFlushScanMix" MinimumRemainingVolume="0" Cycles="1" />
      <Imaging ChemistryName="SecondBaseRead1" MinimumRemainingVolume="0" Cycles="1" />
      <Imaging ChemistryName="CompleteCycle" MinimumRemainingVolume="0" Cycles="NumCycles - 2" />
      <End ChemistryName="EndRead" />
    </ReadDefinition>
    <ReadDefinition IsIndexed="False" Name="SecondRead">
      <FirstBase ChemistryName="FirstBase" MinimumRemainingVolume="0" Cycles="1" />
      <Imaging ChemistryName="CompleteCycle" MinimumRemainingVolume="0" Cycles="NumCycles - 1" />
      <End ChemistryName="EndRead" />
    </ReadDefinition>
    <ReadDefinition IsIndexed="True" Name="IndexRead1">
      <FirstBase ChemistryName="FirstBase" MinimumRemainingVolume="0" Cycles="1" />
      <Imaging ChemistryName="CompleteCycle" MinimumRemainingVolume="0" Cycles="NumCycles - 1" />
      <End ChemistryName="EndRead" />
    </ReadDefinition>
    <ReadDefinition IsIndexed="True" Name="IndexRead2">
      <FirstBase ChemistryName="FirstBase" MinimumRemainingVolume="0" Cycles="1" />
      <Imaging ChemistryName="CompleteCycle" MinimumRemainingVolume="0" Cycles="NumCycles - 1" />
      <End ChemistryName="EndRead" />
    </ReadDefinition>
  </ReadDefinitions>
  <Reagents Name="Local reagents generated from hardware mappings." Version="1">
    <ValveA>
      <Reagent Name="BB3" Description="See local hardware map." SelectorValvePosition="1" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BMS" Description="See local hardware map." SelectorValvePosition="2" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BDR" Description="See local hardware map." SelectorValvePosition="3" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="EXT" Description="See local hardware map." SelectorValvePosition="4" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BRM" Description="See local hardware map." SelectorValvePosition="5" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BP10" Description="See local hardware map." SelectorValvePosition="6" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BP11" Description="See local hardware map." SelectorValvePosition="7" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BP12" Description="See local hardware map." SelectorValvePosition="8" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BP14" Description="See local hardware map." SelectorValvePosition="8" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BLM1" Description="See local hardware map." SelectorValvePosition="9" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BLM2" Description="See local hardware map." SelectorValvePosition="10" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Waste" Description="See local hardware map." SelectorValvePosition="11" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="CBM" Description="See local hardware map." SelectorValvePosition="12" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Avoid" Description="See local hardware map." SelectorValvePosition="12" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BB2" Description="See local hardware map." SelectorValvePosition="13" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="SBM" Description="See local hardware map." SelectorValvePosition="14" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BB1" Description="See local hardware map." SelectorValvePosition="15" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="IBM" Description="See local hardware map." SelectorValvePosition="16" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Plug1" Description="See local hardware map." SelectorValvePosition="17" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="X" Description="See local hardware map." SelectorValvePosition="18" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Air" Description="See local hardware map." SelectorValvePosition="19" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Plug2" Description="See local hardware map." SelectorValvePosition="20" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="TMP" Description="See local hardware map." SelectorValvePosition="21" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Cust1" Description="See local hardware map." SelectorValvePosition="22" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Cust2" Description="See local hardware map." SelectorValvePosition="23" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Cust3" Description="See local hardware map." SelectorValvePosition="24" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
    </ValveA>
    <ValveB>
      <Reagent Name="BLM2" Description="See local hardware map." SelectorValvePosition="1" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BLM1" Description="See local hardware map." SelectorValvePosition="2" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BP14" Description="See local hardware map." SelectorValvePosition="3" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BP12" Description="See local hardware map." SelectorValvePosition="3" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BP11" Description="See local hardware map." SelectorValvePosition="4" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BP10" Description="See local hardware map." SelectorValvePosition="5" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BRM" Description="See local hardware map." SelectorValvePosition="6" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="EXT" Description="See local hardware map." SelectorValvePosition="7" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BB3" Description="See local hardware map." SelectorValvePosition="8" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BMS" Description="See local hardware map." SelectorValvePosition="9" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BDR" Description="See local hardware map." SelectorValvePosition="10" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Air" Description="See local hardware map." SelectorValvePosition="11" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="X" Description="See local hardware map." SelectorValvePosition="12" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Plug1" Description="See local hardware map." SelectorValvePosition="13" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="IBM" Description="See local hardware map." SelectorValvePosition="14" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BB1" Description="See local hardware map." SelectorValvePosition="15" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="SBM" Description="See local hardware map." SelectorValvePosition="16" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="BB2" Description="See local hardware map." SelectorValvePosition="17" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="CBM" Description="See local hardware map." SelectorValvePosition="18" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Avoid" Description="See local hardware map." SelectorValvePosition="18" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Waste" Description="See local hardware map." SelectorValvePosition="19" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Plug2" Description="See local hardware map." SelectorValvePosition="20" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="TMP" Description="See local hardware map." SelectorValvePosition="21" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Cust3" Description="See local hardware map." SelectorValvePosition="22" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Cust2" Description="See local hardware map." SelectorValvePosition="23" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Cust1" Description="See local hardware map." SelectorValvePosition="24" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
    </ValveB>
    <PumpValve>
      <Reagent Name="Pressure" Description="See local hardware map." SelectorValvePosition="1" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Air" Description="See local hardware map." SelectorValvePosition="2" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Avoid" Description="See local hardware map." SelectorValvePosition="2" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="FCA" Description="See local hardware map." SelectorValvePosition="3" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="FCB" Description="See local hardware map." SelectorValvePosition="4" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Rinse" Description="See local hardware map." SelectorValvePosition="5" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
      <Reagent Name="Waste" Description="See local hardware map." SelectorValvePosition="6" DispenseDelay="0" AspirateDelay="0" AspirateDelaySlope="0" AspirateDelayOffset="0" RequiresPriming="true" />
    </PumpValve>
  </Reagents>
  <Primers>
    <ReadOne Default="BP10" Custom="Cust1" />
    <ReadTwo Default="BP11" Custom="Cust2" />
    <IndexOne Default="BP14" Custom="Cust3" />
    <IndexTwo Default="BP14" Custom="Cust3" />
  </Primers>
  <Exposures>
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="1" EndCycle="1" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="1" EndCycle="1" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="2" EndCycle="2" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="2" EndCycle="2" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="3" EndCycle="3" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="3" EndCycle="3" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="4" EndCycle="4" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="4" EndCycle="4" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="5" EndCycle="5" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="5" EndCycle="5" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="6" EndCycle="6" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="6" EndCycle="6" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="7" EndCycle="7" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="7" EndCycle="7" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="8" EndCycle="8" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="8" EndCycle="8" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="9" EndCycle="9" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="9" EndCycle="9" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="10" EndCycle="10" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="10" EndCycle="10" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="11" EndCycle="11" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="11" EndCycle="11" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="12" EndCycle="12" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="12" EndCycle="12" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="13" EndCycle="13" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="13" EndCycle="13" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="14" EndCycle="14" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="14" EndCycle="14" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="15" EndCycle="15" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="15" EndCycle="15" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="16" EndCycle="16" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="16" EndCycle="16" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="17" EndCycle="17" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="17" EndCycle="17" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="18" EndCycle="18" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="18" EndCycle="18" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="19" EndCycle="19" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="19" EndCycle="19" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="20" EndCycle="20" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="20" EndCycle="20" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="21" EndCycle="21" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="21" EndCycle="21" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="22" EndCycle="22" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="22" EndCycle="22" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="23" EndCycle="23" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="23" EndCycle="23" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="24" EndCycle="24" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="24" EndCycle="24" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="25" EndCycle="25" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="25" EndCycle="25" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="26" EndCycle="26" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="26" EndCycle="26" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="27" EndCycle="27" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="27" EndCycle="27" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="28" EndCycle="28" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="28" EndCycle="28" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="29" EndCycle="29" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="29" EndCycle="29" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="30" EndCycle="30" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="30" EndCycle="30" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="31" EndCycle="31" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="31" EndCycle="31" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="32" EndCycle="32" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="32" EndCycle="32" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="33" EndCycle="33" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="33" EndCycle="33" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="34" EndCycle="34" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="34" EndCycle="34" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="35" EndCycle="35" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="35" EndCycle="35" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="36" EndCycle="36" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="36" EndCycle="36" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="37" EndCycle="37" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="37" EndCycle="37" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="38" EndCycle="38" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="38" EndCycle="38" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="39" EndCycle="39" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="39" EndCycle="39" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="40" EndCycle="40" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="40" EndCycle="40" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="41" EndCycle="41" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="41" EndCycle="41" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="42" EndCycle="42" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="42" EndCycle="42" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="43" EndCycle="43" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="43" EndCycle="43" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="44" EndCycle="44" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="44" EndCycle="44" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="45" EndCycle="45" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="45" EndCycle="45" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="46" EndCycle="46" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="46" EndCycle="46" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="47" EndCycle="47" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="47" EndCycle="47" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="48" EndCycle="48" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="48" EndCycle="48" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="49" EndCycle="49" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="49" EndCycle="49" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="50" EndCycle="50" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="50" EndCycle="50" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="51" EndCycle="51" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="51" EndCycle="51" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="52" EndCycle="52" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="52" EndCycle="52" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="53" EndCycle="53" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="53" EndCycle="53" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="54" EndCycle="54" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="54" EndCycle="54" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="55" EndCycle="55" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="55" EndCycle="55" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="56" EndCycle="56" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="56" EndCycle="56" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="57" EndCycle="57" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="57" EndCycle="57" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="58" EndCycle="58" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="58" EndCycle="58" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="59" EndCycle="59" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="59" EndCycle="59" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="60" EndCycle="60" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="60" EndCycle="60" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="61" EndCycle="61" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="61" EndCycle="61" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="62" EndCycle="62" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="62" EndCycle="62" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="63" EndCycle="63" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="63" EndCycle="63" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="64" EndCycle="64" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="64" EndCycle="64" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="65" EndCycle="65" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="51" Ramp="0" Read="FirstRead" StartCycle="65" EndCycle="65" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="66" EndCycle="66" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="52" Ramp="0" Read="FirstRead" StartCycle="66" EndCycle="66" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="67" EndCycle="67" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="52" Ramp="0" Read="FirstRead" StartCycle="67" EndCycle="67" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="68" EndCycle="68" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="52" Ramp="0" Read="FirstRead" StartCycle="68" EndCycle="68" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="69" EndCycle="69" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="52" Ramp="0" Read="FirstRead" StartCycle="69" EndCycle="69" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="57" Ramp="0" Read="FirstRead" StartCycle="70" EndCycle="70" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="53" Ramp="0" Read="FirstRead" StartCycle="70" EndCycle="70" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="58" Ramp="0" Read="FirstRead" StartCycle="71" EndCycle="71" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="53" Ramp="0" Read="FirstRead" StartCycle="71" EndCycle="71" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="58" Ramp="0" Read="FirstRead" StartCycle="72" EndCycle="72" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="53" Ramp="0" Read="FirstRead" StartCycle="72" EndCycle="72" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="59" Ramp="0" Read="FirstRead" StartCycle="73" EndCycle="73" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="53" Ramp="0" Read="FirstRead" StartCycle="73" EndCycle="73" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="59" Ramp="0" Read="FirstRead" StartCycle="74" EndCycle="74" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="53" Ramp="0" Read="FirstRead" StartCycle="74" EndCycle="74" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="59" Ramp="0" Read="FirstRead" StartCycle="75" EndCycle="75" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="53" Ramp="0" Read="FirstRead" StartCycle="75" EndCycle="75" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="59" Ramp="0" Read="FirstRead" StartCycle="76" EndCycle="76" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="53" Ramp="0" Read="FirstRead" StartCycle="76" EndCycle="76" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="59" Ramp="0" Read="FirstRead" StartCycle="77" EndCycle="77" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="54" Ramp="0" Read="FirstRead" StartCycle="77" EndCycle="77" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="60" Ramp="0" Read="FirstRead" StartCycle="78" EndCycle="78" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="54" Ramp="0" Read="FirstRead" StartCycle="78" EndCycle="78" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="60" Ramp="0" Read="FirstRead" StartCycle="79" EndCycle="79" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="54" Ramp="0" Read="FirstRead" StartCycle="79" EndCycle="79" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="60" Ramp="0" Read="FirstRead" StartCycle="80" EndCycle="80" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="54" Ramp="0" Read="FirstRead" StartCycle="80" EndCycle="80" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="60" Ramp="0" Read="FirstRead" StartCycle="81" EndCycle="81" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="54" Ramp="0" Read="FirstRead" StartCycle="81" EndCycle="81" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="60" Ramp="0" Read="FirstRead" StartCycle="82" EndCycle="82" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="54" Ramp="0" Read="FirstRead" StartCycle="82" EndCycle="82" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="61" Ramp="0" Read="FirstRead" StartCycle="83" EndCycle="83" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="55" Ramp="0" Read="FirstRead" StartCycle="83" EndCycle="83" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="61" Ramp="0" Read="FirstRead" StartCycle="84" EndCycle="84" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="55" Ramp="0" Read="FirstRead" StartCycle="84" EndCycle="84" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="62" Ramp="0" Read="FirstRead" StartCycle="85" EndCycle="85" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="55" Ramp="0" Read="FirstRead" StartCycle="85" EndCycle="85" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="62" Ramp="0" Read="FirstRead" StartCycle="86" EndCycle="86" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="56" Ramp="0" Read="FirstRead" StartCycle="86" EndCycle="86" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="62" Ramp="0" Read="FirstRead" StartCycle="87" EndCycle="87" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="56" Ramp="0" Read="FirstRead" StartCycle="87" EndCycle="87" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="62" Ramp="0" Read="FirstRead" StartCycle="88" EndCycle="88" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="56" Ramp="0" Read="FirstRead" StartCycle="88" EndCycle="88" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="63" Ramp="0" Read="FirstRead" StartCycle="89" EndCycle="89" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="56" Ramp="0" Read="FirstRead" StartCycle="89" EndCycle="89" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="63" Ramp="0" Read="FirstRead" StartCycle="90" EndCycle="90" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="56" Ramp="0" Read="FirstRead" StartCycle="90" EndCycle="90" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="63" Ramp="0" Read="FirstRead" StartCycle="91" EndCycle="91" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="56" Ramp="0" Read="FirstRead" StartCycle="91" EndCycle="91" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="63" Ramp="0" Read="FirstRead" StartCycle="92" EndCycle="92" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="57" Ramp="0" Read="FirstRead" StartCycle="92" EndCycle="92" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="64" Ramp="0" Read="FirstRead" StartCycle="93" EndCycle="93" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="57" Ramp="0" Read="FirstRead" StartCycle="93" EndCycle="93" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="64" Ramp="0" Read="FirstRead" StartCycle="94" EndCycle="94" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="57" Ramp="0" Read="FirstRead" StartCycle="94" EndCycle="94" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="65" Ramp="0" Read="FirstRead" StartCycle="95" EndCycle="95" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="57" Ramp="0" Read="FirstRead" StartCycle="95" EndCycle="95" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="65" Ramp="0" Read="FirstRead" StartCycle="96" EndCycle="96" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="57" Ramp="0" Read="FirstRead" StartCycle="96" EndCycle="96" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="65" Ramp="0" Read="FirstRead" StartCycle="97" EndCycle="97" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="58" Ramp="0" Read="FirstRead" StartCycle="97" EndCycle="97" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="65" Ramp="0" Read="FirstRead" StartCycle="98" EndCycle="98" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="58" Ramp="0" Read="FirstRead" StartCycle="98" EndCycle="98" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="66" Ramp="0" Read="FirstRead" StartCycle="99" EndCycle="99" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="59" Ramp="0" Read="FirstRead" StartCycle="99" EndCycle="99" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="66" Ramp="0" Read="FirstRead" StartCycle="100" EndCycle="100" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="59" Ramp="0" Read="FirstRead" StartCycle="100" EndCycle="100" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="66" Ramp="0" Read="FirstRead" StartCycle="101" EndCycle="101" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="59" Ramp="0" Read="FirstRead" StartCycle="101" EndCycle="101" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="67" Ramp="0" Read="FirstRead" StartCycle="102" EndCycle="102" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="59" Ramp="0" Read="FirstRead" StartCycle="102" EndCycle="102" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="67" Ramp="0" Read="FirstRead" StartCycle="103" EndCycle="103" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="59" Ramp="0" Read="FirstRead" StartCycle="103" EndCycle="103" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="68" Ramp="0" Read="FirstRead" StartCycle="104" EndCycle="104" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="60" Ramp="0" Read="FirstRead" StartCycle="104" EndCycle="104" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="68" Ramp="0" Read="FirstRead" StartCycle="105" EndCycle="105" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="60" Ramp="0" Read="FirstRead" StartCycle="105" EndCycle="105" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="68" Ramp="0" Read="FirstRead" StartCycle="106" EndCycle="106" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="60" Ramp="0" Read="FirstRead" StartCycle="106" EndCycle="106" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="68" Ramp="0" Read="FirstRead" StartCycle="107" EndCycle="107" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="60" Ramp="0" Read="FirstRead" StartCycle="107" EndCycle="107" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="69" Ramp="0" Read="FirstRead" StartCycle="108" EndCycle="108" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="61" Ramp="0" Read="FirstRead" StartCycle="108" EndCycle="108" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="69" Ramp="0" Read="FirstRead" StartCycle="109" EndCycle="109" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="61" Ramp="0" Read="FirstRead" StartCycle="109" EndCycle="109" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="69" Ramp="0" Read="FirstRead" StartCycle="110" EndCycle="110" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="61" Ramp="0" Read="FirstRead" StartCycle="110" EndCycle="110" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="70" Ramp="0" Read="FirstRead" StartCycle="111" EndCycle="111" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="62" Ramp="0" Read="FirstRead" StartCycle="111" EndCycle="111" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="70" Ramp="0" Read="FirstRead" StartCycle="112" EndCycle="112" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="62" Ramp="0" Read="FirstRead" StartCycle="112" EndCycle="112" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="71" Ramp="0" Read="FirstRead" StartCycle="113" EndCycle="113" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="62" Ramp="0" Read="FirstRead" StartCycle="113" EndCycle="113" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="71" Ramp="0" Read="FirstRead" StartCycle="114" EndCycle="114" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="62" Ramp="0" Read="FirstRead" StartCycle="114" EndCycle="114" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="71" Ramp="0" Read="FirstRead" StartCycle="115" EndCycle="115" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="63" Ramp="0" Read="FirstRead" StartCycle="115" EndCycle="115" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="72" Ramp="0" Read="FirstRead" StartCycle="116" EndCycle="116" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="63" Ramp="0" Read="FirstRead" StartCycle="116" EndCycle="116" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="72" Ramp="0" Read="FirstRead" StartCycle="117" EndCycle="117" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="63" Ramp="0" Read="FirstRead" StartCycle="117" EndCycle="117" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="72" Ramp="0" Read="FirstRead" StartCycle="118" EndCycle="118" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="64" Ramp="0" Read="FirstRead" StartCycle="118" EndCycle="118" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="73" Ramp="0" Read="FirstRead" StartCycle="119" EndCycle="119" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="64" Ramp="0" Read="FirstRead" StartCycle="119" EndCycle="119" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="74" Ramp="0" Read="FirstRead" StartCycle="120" EndCycle="120" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="65" Ramp="0" Read="FirstRead" StartCycle="120" EndCycle="120" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="74" Ramp="0" Read="FirstRead" StartCycle="121" EndCycle="121" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="65" Ramp="0" Read="FirstRead" StartCycle="121" EndCycle="121" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="74" Ramp="0" Read="FirstRead" StartCycle="122" EndCycle="122" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="65" Ramp="0" Read="FirstRead" StartCycle="122" EndCycle="122" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="75" Ramp="0" Read="FirstRead" StartCycle="123" EndCycle="123" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="66" Ramp="0" Read="FirstRead" StartCycle="123" EndCycle="123" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="75" Ramp="0" Read="FirstRead" StartCycle="124" EndCycle="124" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="66" Ramp="0" Read="FirstRead" StartCycle="124" EndCycle="124" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="76" Ramp="0" Read="FirstRead" StartCycle="125" EndCycle="125" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="66" Ramp="0" Read="FirstRead" StartCycle="125" EndCycle="125" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="77" Ramp="0" Read="FirstRead" StartCycle="126" EndCycle="126" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="67" Ramp="0" Read="FirstRead" StartCycle="126" EndCycle="126" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="77" Ramp="0" Read="FirstRead" StartCycle="127" EndCycle="127" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="68" Ramp="0" Read="FirstRead" StartCycle="127" EndCycle="127" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="78" Ramp="0" Read="FirstRead" StartCycle="128" EndCycle="128" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="68" Ramp="0" Read="FirstRead" StartCycle="128" EndCycle="128" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="78" Ramp="0" Read="FirstRead" StartCycle="129" EndCycle="129" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="68" Ramp="0" Read="FirstRead" StartCycle="129" EndCycle="129" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="79" Ramp="0" Read="FirstRead" StartCycle="130" EndCycle="130" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="69" Ramp="0" Read="FirstRead" StartCycle="130" EndCycle="130" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="80" Ramp="0" Read="FirstRead" StartCycle="131" EndCycle="131" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="69" Ramp="0" Read="FirstRead" StartCycle="131" EndCycle="131" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="80" Ramp="0" Read="FirstRead" StartCycle="132" EndCycle="132" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="70" Ramp="0" Read="FirstRead" StartCycle="132" EndCycle="132" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="81" Ramp="0" Read="FirstRead" StartCycle="133" EndCycle="133" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="70" Ramp="0" Read="FirstRead" StartCycle="133" EndCycle="133" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="81" Ramp="0" Read="FirstRead" StartCycle="134" EndCycle="134" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="71" Ramp="0" Read="FirstRead" StartCycle="134" EndCycle="134" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="83" Ramp="0" Read="FirstRead" StartCycle="135" EndCycle="135" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="71" Ramp="0" Read="FirstRead" StartCycle="135" EndCycle="135" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="83" Ramp="0" Read="FirstRead" StartCycle="136" EndCycle="136" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="72" Ramp="0" Read="FirstRead" StartCycle="136" EndCycle="136" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="84" Ramp="0" Read="FirstRead" StartCycle="137" EndCycle="137" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="72" Ramp="0" Read="FirstRead" StartCycle="137" EndCycle="137" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="84" Ramp="0" Read="FirstRead" StartCycle="138" EndCycle="138" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="73" Ramp="0" Read="FirstRead" StartCycle="138" EndCycle="138" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="86" Ramp="0" Read="FirstRead" StartCycle="139" EndCycle="139" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="74" Ramp="0" Read="FirstRead" StartCycle="139" EndCycle="139" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="86" Ramp="0" Read="FirstRead" StartCycle="140" EndCycle="140" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="74" Ramp="0" Read="FirstRead" StartCycle="140" EndCycle="140" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="87" Ramp="0" Read="FirstRead" StartCycle="141" EndCycle="141" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="74" Ramp="0" Read="FirstRead" StartCycle="141" EndCycle="141" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="87" Ramp="0" Read="FirstRead" StartCycle="142" EndCycle="142" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="75" Ramp="0" Read="FirstRead" StartCycle="142" EndCycle="142" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="88" Ramp="0" Read="FirstRead" StartCycle="143" EndCycle="143" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="75" Ramp="0" Read="FirstRead" StartCycle="143" EndCycle="143" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="89" Ramp="0" Read="FirstRead" StartCycle="144" EndCycle="144" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="75" Ramp="0" Read="FirstRead" StartCycle="144" EndCycle="144" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="89" Ramp="0" Read="FirstRead" StartCycle="145" EndCycle="145" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="76" Ramp="0" Read="FirstRead" StartCycle="145" EndCycle="145" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="90" Ramp="0" Read="FirstRead" StartCycle="146" EndCycle="146" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="76" Ramp="0" Read="FirstRead" StartCycle="146" EndCycle="146" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="90" Ramp="0" Read="FirstRead" StartCycle="147" EndCycle="147" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="76" Ramp="0" Read="FirstRead" StartCycle="147" EndCycle="147" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="90" Ramp="0" Read="FirstRead" StartCycle="148" EndCycle="148" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="77" Ramp="0" Read="FirstRead" StartCycle="148" EndCycle="148" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="91" Ramp="0" Read="FirstRead" StartCycle="149" EndCycle="149" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="77" Ramp="0" Read="FirstRead" StartCycle="149" EndCycle="149" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="91" Ramp="0" Read="FirstRead" StartCycle="150" EndCycle="150" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="76" Ramp="0" Read="FirstRead" StartCycle="150" EndCycle="150" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="90" Ramp="0" Read="FirstRead" StartCycle="151" EndCycle="151" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="76" Ramp="0" Read="FirstRead" StartCycle="151" EndCycle="151" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="1" EndCycle="1" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="1" EndCycle="1" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="2" EndCycle="2" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="2" EndCycle="2" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="3" EndCycle="3" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="3" EndCycle="3" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="4" EndCycle="4" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="4" EndCycle="4" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="5" EndCycle="5" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="5" EndCycle="5" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="6" EndCycle="6" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="6" EndCycle="6" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="7" EndCycle="7" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="7" EndCycle="7" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="8" EndCycle="8" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="8" EndCycle="8" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="9" EndCycle="9" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="9" EndCycle="9" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="10" EndCycle="10" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="10" EndCycle="10" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="11" EndCycle="11" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="11" EndCycle="11" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="12" EndCycle="12" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="12" EndCycle="12" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="13" EndCycle="13" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="13" EndCycle="13" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="14" EndCycle="14" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="14" EndCycle="14" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="15" EndCycle="15" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="15" EndCycle="15" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="16" EndCycle="16" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="16" EndCycle="16" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="17" EndCycle="17" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="17" EndCycle="17" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="56" Ramp="0" Read="SecondRead" StartCycle="18" EndCycle="18" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="18" EndCycle="18" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="19" EndCycle="19" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="19" EndCycle="19" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="20" EndCycle="20" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="20" EndCycle="20" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="21" EndCycle="21" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="21" EndCycle="21" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="22" EndCycle="22" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="47" Ramp="0" Read="SecondRead" StartCycle="22" EndCycle="22" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="23" EndCycle="23" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="48" Ramp="0" Read="SecondRead" StartCycle="23" EndCycle="23" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="24" EndCycle="24" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="48" Ramp="0" Read="SecondRead" StartCycle="24" EndCycle="24" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="25" EndCycle="25" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="48" Ramp="0" Read="SecondRead" StartCycle="25" EndCycle="25" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="26" EndCycle="26" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="48" Ramp="0" Read="SecondRead" StartCycle="26" EndCycle="26" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="27" EndCycle="27" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="48" Ramp="0" Read="SecondRead" StartCycle="27" EndCycle="27" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="28" EndCycle="28" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="48" Ramp="0" Read="SecondRead" StartCycle="28" EndCycle="28" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="29" EndCycle="29" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="48" Ramp="0" Read="SecondRead" StartCycle="29" EndCycle="29" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="30" EndCycle="30" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="48" Ramp="0" Read="SecondRead" StartCycle="30" EndCycle="30" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="31" EndCycle="31" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="48" Ramp="0" Read="SecondRead" StartCycle="31" EndCycle="31" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="57" Ramp="0" Read="SecondRead" StartCycle="32" EndCycle="32" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="48" Ramp="0" Read="SecondRead" StartCycle="32" EndCycle="32" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="58" Ramp="0" Read="SecondRead" StartCycle="33" EndCycle="33" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="48" Ramp="0" Read="SecondRead" StartCycle="33" EndCycle="33" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="58" Ramp="0" Read="SecondRead" StartCycle="34" EndCycle="34" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="48" Ramp="0" Read="SecondRead" StartCycle="34" EndCycle="34" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="58" Ramp="0" Read="SecondRead" StartCycle="35" EndCycle="35" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="48" Ramp="0" Read="SecondRead" StartCycle="35" EndCycle="35" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="58" Ramp="0" Read="SecondRead" StartCycle="36" EndCycle="36" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="49" Ramp="0" Read="SecondRead" StartCycle="36" EndCycle="36" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="58" Ramp="0" Read="SecondRead" StartCycle="37" EndCycle="37" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="49" Ramp="0" Read="SecondRead" StartCycle="37" EndCycle="37" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="58" Ramp="0" Read="SecondRead" StartCycle="38" EndCycle="38" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="49" Ramp="0" Read="SecondRead" StartCycle="38" EndCycle="38" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="58" Ramp="0" Read="SecondRead" StartCycle="39" EndCycle="39" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="49" Ramp="0" Read="SecondRead" StartCycle="39" EndCycle="39" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="58" Ramp="0" Read="SecondRead" StartCycle="40" EndCycle="40" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="49" Ramp="0" Read="SecondRead" StartCycle="40" EndCycle="40" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="58" Ramp="0" Read="SecondRead" StartCycle="41" EndCycle="41" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="49" Ramp="0" Read="SecondRead" StartCycle="41" EndCycle="41" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="59" Ramp="0" Read="SecondRead" StartCycle="42" EndCycle="42" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="49" Ramp="0" Read="SecondRead" StartCycle="42" EndCycle="42" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="59" Ramp="0" Read="SecondRead" StartCycle="43" EndCycle="43" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="49" Ramp="0" Read="SecondRead" StartCycle="43" EndCycle="43" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="59" Ramp="0" Read="SecondRead" StartCycle="44" EndCycle="44" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="49" Ramp="0" Read="SecondRead" StartCycle="44" EndCycle="44" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="59" Ramp="0" Read="SecondRead" StartCycle="45" EndCycle="45" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="49" Ramp="0" Read="SecondRead" StartCycle="45" EndCycle="45" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="59" Ramp="0" Read="SecondRead" StartCycle="46" EndCycle="46" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="50" Ramp="0" Read="SecondRead" StartCycle="46" EndCycle="46" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="59" Ramp="0" Read="SecondRead" StartCycle="47" EndCycle="47" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="50" Ramp="0" Read="SecondRead" StartCycle="47" EndCycle="47" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="59" Ramp="0" Read="SecondRead" StartCycle="48" EndCycle="48" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="50" Ramp="0" Read="SecondRead" StartCycle="48" EndCycle="48" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="59" Ramp="0" Read="SecondRead" StartCycle="49" EndCycle="49" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="50" Ramp="0" Read="SecondRead" StartCycle="49" EndCycle="49" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="60" Ramp="0" Read="SecondRead" StartCycle="50" EndCycle="50" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="50" Ramp="0" Read="SecondRead" StartCycle="50" EndCycle="50" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="60" Ramp="0" Read="SecondRead" StartCycle="51" EndCycle="51" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="50" Ramp="0" Read="SecondRead" StartCycle="51" EndCycle="51" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="60" Ramp="0" Read="SecondRead" StartCycle="52" EndCycle="52" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="50" Ramp="0" Read="SecondRead" StartCycle="52" EndCycle="52" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="60" Ramp="0" Read="SecondRead" StartCycle="53" EndCycle="53" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="50" Ramp="0" Read="SecondRead" StartCycle="53" EndCycle="53" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="60" Ramp="0" Read="SecondRead" StartCycle="54" EndCycle="54" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="51" Ramp="0" Read="SecondRead" StartCycle="54" EndCycle="54" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="60" Ramp="0" Read="SecondRead" StartCycle="55" EndCycle="55" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="51" Ramp="0" Read="SecondRead" StartCycle="55" EndCycle="55" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="60" Ramp="0" Read="SecondRead" StartCycle="56" EndCycle="56" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="51" Ramp="0" Read="SecondRead" StartCycle="56" EndCycle="56" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="61" Ramp="0" Read="SecondRead" StartCycle="57" EndCycle="57" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="51" Ramp="0" Read="SecondRead" StartCycle="57" EndCycle="57" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="61" Ramp="0" Read="SecondRead" StartCycle="58" EndCycle="58" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="51" Ramp="0" Read="SecondRead" StartCycle="58" EndCycle="58" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="61" Ramp="0" Read="SecondRead" StartCycle="59" EndCycle="59" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="51" Ramp="0" Read="SecondRead" StartCycle="59" EndCycle="59" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="61" Ramp="0" Read="SecondRead" StartCycle="60" EndCycle="60" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="51" Ramp="0" Read="SecondRead" StartCycle="60" EndCycle="60" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="61" Ramp="0" Read="SecondRead" StartCycle="61" EndCycle="61" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="52" Ramp="0" Read="SecondRead" StartCycle="61" EndCycle="61" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="61" Ramp="0" Read="SecondRead" StartCycle="62" EndCycle="62" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="52" Ramp="0" Read="SecondRead" StartCycle="62" EndCycle="62" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="62" Ramp="0" Read="SecondRead" StartCycle="63" EndCycle="63" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="52" Ramp="0" Read="SecondRead" StartCycle="63" EndCycle="63" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="62" Ramp="0" Read="SecondRead" StartCycle="64" EndCycle="64" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="52" Ramp="0" Read="SecondRead" StartCycle="64" EndCycle="64" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="62" Ramp="0" Read="SecondRead" StartCycle="65" EndCycle="65" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="52" Ramp="0" Read="SecondRead" StartCycle="65" EndCycle="65" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="62" Ramp="0" Read="SecondRead" StartCycle="66" EndCycle="66" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="52" Ramp="0" Read="SecondRead" StartCycle="66" EndCycle="66" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="62" Ramp="0" Read="SecondRead" StartCycle="67" EndCycle="67" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="53" Ramp="0" Read="SecondRead" StartCycle="67" EndCycle="67" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="63" Ramp="0" Read="SecondRead" StartCycle="68" EndCycle="68" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="53" Ramp="0" Read="SecondRead" StartCycle="68" EndCycle="68" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="63" Ramp="0" Read="SecondRead" StartCycle="69" EndCycle="69" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="53" Ramp="0" Read="SecondRead" StartCycle="69" EndCycle="69" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="63" Ramp="0" Read="SecondRead" StartCycle="70" EndCycle="70" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="53" Ramp="0" Read="SecondRead" StartCycle="70" EndCycle="70" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="63" Ramp="0" Read="SecondRead" StartCycle="71" EndCycle="71" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="53" Ramp="0" Read="SecondRead" StartCycle="71" EndCycle="71" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="63" Ramp="0" Read="SecondRead" StartCycle="72" EndCycle="72" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="53" Ramp="0" Read="SecondRead" StartCycle="72" EndCycle="72" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="64" Ramp="0" Read="SecondRead" StartCycle="73" EndCycle="73" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="54" Ramp="0" Read="SecondRead" StartCycle="73" EndCycle="73" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="64" Ramp="0" Read="SecondRead" StartCycle="74" EndCycle="74" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="54" Ramp="0" Read="SecondRead" StartCycle="74" EndCycle="74" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="64" Ramp="0" Read="SecondRead" StartCycle="75" EndCycle="75" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="54" Ramp="0" Read="SecondRead" StartCycle="75" EndCycle="75" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="64" Ramp="0" Read="SecondRead" StartCycle="76" EndCycle="76" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="54" Ramp="0" Read="SecondRead" StartCycle="76" EndCycle="76" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="64" Ramp="0" Read="SecondRead" StartCycle="77" EndCycle="77" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="54" Ramp="0" Read="SecondRead" StartCycle="77" EndCycle="77" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="65" Ramp="0" Read="SecondRead" StartCycle="78" EndCycle="78" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="55" Ramp="0" Read="SecondRead" StartCycle="78" EndCycle="78" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="65" Ramp="0" Read="SecondRead" StartCycle="79" EndCycle="79" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="55" Ramp="0" Read="SecondRead" StartCycle="79" EndCycle="79" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="65" Ramp="0" Read="SecondRead" StartCycle="80" EndCycle="80" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="55" Ramp="0" Read="SecondRead" StartCycle="80" EndCycle="80" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="65" Ramp="0" Read="SecondRead" StartCycle="81" EndCycle="81" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="55" Ramp="0" Read="SecondRead" StartCycle="81" EndCycle="81" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="65" Ramp="0" Read="SecondRead" StartCycle="82" EndCycle="82" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="55" Ramp="0" Read="SecondRead" StartCycle="82" EndCycle="82" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="66" Ramp="0" Read="SecondRead" StartCycle="83" EndCycle="83" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="56" Ramp="0" Read="SecondRead" StartCycle="83" EndCycle="83" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="66" Ramp="0" Read="SecondRead" StartCycle="84" EndCycle="84" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="56" Ramp="0" Read="SecondRead" StartCycle="84" EndCycle="84" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="66" Ramp="0" Read="SecondRead" StartCycle="85" EndCycle="85" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="56" Ramp="0" Read="SecondRead" StartCycle="85" EndCycle="85" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="66" Ramp="0" Read="SecondRead" StartCycle="86" EndCycle="86" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="56" Ramp="0" Read="SecondRead" StartCycle="86" EndCycle="86" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="67" Ramp="0" Read="SecondRead" StartCycle="87" EndCycle="87" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="57" Ramp="0" Read="SecondRead" StartCycle="87" EndCycle="87" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="67" Ramp="0" Read="SecondRead" StartCycle="88" EndCycle="88" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="57" Ramp="0" Read="SecondRead" StartCycle="88" EndCycle="88" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="67" Ramp="0" Read="SecondRead" StartCycle="89" EndCycle="89" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="57" Ramp="0" Read="SecondRead" StartCycle="89" EndCycle="89" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="68" Ramp="0" Read="SecondRead" StartCycle="90" EndCycle="90" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="57" Ramp="0" Read="SecondRead" StartCycle="90" EndCycle="90" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="68" Ramp="0" Read="SecondRead" StartCycle="91" EndCycle="91" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="58" Ramp="0" Read="SecondRead" StartCycle="91" EndCycle="91" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="68" Ramp="0" Read="SecondRead" StartCycle="92" EndCycle="92" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="58" Ramp="0" Read="SecondRead" StartCycle="92" EndCycle="92" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="68" Ramp="0" Read="SecondRead" StartCycle="93" EndCycle="93" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="58" Ramp="0" Read="SecondRead" StartCycle="93" EndCycle="93" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="69" Ramp="0" Read="SecondRead" StartCycle="94" EndCycle="94" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="58" Ramp="0" Read="SecondRead" StartCycle="94" EndCycle="94" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="69" Ramp="0" Read="SecondRead" StartCycle="95" EndCycle="95" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="59" Ramp="0" Read="SecondRead" StartCycle="95" EndCycle="95" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="69" Ramp="0" Read="SecondRead" StartCycle="96" EndCycle="96" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="59" Ramp="0" Read="SecondRead" StartCycle="96" EndCycle="96" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="69" Ramp="0" Read="SecondRead" StartCycle="97" EndCycle="97" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="59" Ramp="0" Read="SecondRead" StartCycle="97" EndCycle="97" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="70" Ramp="0" Read="SecondRead" StartCycle="98" EndCycle="98" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="59" Ramp="0" Read="SecondRead" StartCycle="98" EndCycle="98" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="70" Ramp="0" Read="SecondRead" StartCycle="99" EndCycle="99" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="60" Ramp="0" Read="SecondRead" StartCycle="99" EndCycle="99" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="70" Ramp="0" Read="SecondRead" StartCycle="100" EndCycle="100" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="60" Ramp="0" Read="SecondRead" StartCycle="100" EndCycle="100" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="71" Ramp="0" Read="SecondRead" StartCycle="101" EndCycle="101" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="60" Ramp="0" Read="SecondRead" StartCycle="101" EndCycle="101" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="71" Ramp="0" Read="SecondRead" StartCycle="102" EndCycle="102" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="61" Ramp="0" Read="SecondRead" StartCycle="102" EndCycle="102" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="71" Ramp="0" Read="SecondRead" StartCycle="103" EndCycle="103" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="61" Ramp="0" Read="SecondRead" StartCycle="103" EndCycle="103" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="72" Ramp="0" Read="SecondRead" StartCycle="104" EndCycle="104" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="61" Ramp="0" Read="SecondRead" StartCycle="104" EndCycle="104" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="72" Ramp="0" Read="SecondRead" StartCycle="105" EndCycle="105" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="61" Ramp="0" Read="SecondRead" StartCycle="105" EndCycle="105" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="72" Ramp="0" Read="SecondRead" StartCycle="106" EndCycle="106" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="62" Ramp="0" Read="SecondRead" StartCycle="106" EndCycle="106" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="73" Ramp="0" Read="SecondRead" StartCycle="107" EndCycle="107" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="62" Ramp="0" Read="SecondRead" StartCycle="107" EndCycle="107" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="73" Ramp="0" Read="SecondRead" StartCycle="108" EndCycle="108" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="62" Ramp="0" Read="SecondRead" StartCycle="108" EndCycle="108" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="73" Ramp="0" Read="SecondRead" StartCycle="109" EndCycle="109" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="63" Ramp="0" Read="SecondRead" StartCycle="109" EndCycle="109" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="74" Ramp="0" Read="SecondRead" StartCycle="110" EndCycle="110" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="63" Ramp="0" Read="SecondRead" StartCycle="110" EndCycle="110" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="74" Ramp="0" Read="SecondRead" StartCycle="111" EndCycle="111" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="63" Ramp="0" Read="SecondRead" StartCycle="111" EndCycle="111" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="75" Ramp="0" Read="SecondRead" StartCycle="112" EndCycle="112" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="64" Ramp="0" Read="SecondRead" StartCycle="112" EndCycle="112" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="75" Ramp="0" Read="SecondRead" StartCycle="113" EndCycle="113" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="64" Ramp="0" Read="SecondRead" StartCycle="113" EndCycle="113" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="75" Ramp="0" Read="SecondRead" StartCycle="114" EndCycle="114" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="64" Ramp="0" Read="SecondRead" StartCycle="114" EndCycle="114" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="76" Ramp="0" Read="SecondRead" StartCycle="115" EndCycle="115" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="65" Ramp="0" Read="SecondRead" StartCycle="115" EndCycle="115" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="76" Ramp="0" Read="SecondRead" StartCycle="116" EndCycle="116" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="65" Ramp="0" Read="SecondRead" StartCycle="116" EndCycle="116" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="76" Ramp="0" Read="SecondRead" StartCycle="117" EndCycle="117" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="65" Ramp="0" Read="SecondRead" StartCycle="117" EndCycle="117" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="77" Ramp="0" Read="SecondRead" StartCycle="118" EndCycle="118" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="66" Ramp="0" Read="SecondRead" StartCycle="118" EndCycle="118" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="77" Ramp="0" Read="SecondRead" StartCycle="119" EndCycle="119" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="66" Ramp="0" Read="SecondRead" StartCycle="119" EndCycle="119" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="78" Ramp="0" Read="SecondRead" StartCycle="120" EndCycle="120" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="67" Ramp="0" Read="SecondRead" StartCycle="120" EndCycle="120" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="78" Ramp="0" Read="SecondRead" StartCycle="121" EndCycle="121" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="67" Ramp="0" Read="SecondRead" StartCycle="121" EndCycle="121" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="79" Ramp="0" Read="SecondRead" StartCycle="122" EndCycle="122" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="67" Ramp="0" Read="SecondRead" StartCycle="122" EndCycle="122" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="79" Ramp="0" Read="SecondRead" StartCycle="123" EndCycle="123" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="68" Ramp="0" Read="SecondRead" StartCycle="123" EndCycle="123" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="79" Ramp="0" Read="SecondRead" StartCycle="124" EndCycle="124" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="68" Ramp="0" Read="SecondRead" StartCycle="124" EndCycle="124" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="80" Ramp="0" Read="SecondRead" StartCycle="125" EndCycle="125" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="68" Ramp="0" Read="SecondRead" StartCycle="125" EndCycle="125" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="80" Ramp="0" Read="SecondRead" StartCycle="126" EndCycle="126" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="69" Ramp="0" Read="SecondRead" StartCycle="126" EndCycle="126" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="81" Ramp="0" Read="SecondRead" StartCycle="127" EndCycle="127" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="69" Ramp="0" Read="SecondRead" StartCycle="127" EndCycle="127" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="81" Ramp="0" Read="SecondRead" StartCycle="128" EndCycle="128" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="70" Ramp="0" Read="SecondRead" StartCycle="128" EndCycle="128" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="82" Ramp="0" Read="SecondRead" StartCycle="129" EndCycle="129" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="70" Ramp="0" Read="SecondRead" StartCycle="129" EndCycle="129" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="82" Ramp="0" Read="SecondRead" StartCycle="130" EndCycle="130" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="70" Ramp="0" Read="SecondRead" StartCycle="130" EndCycle="130" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="83" Ramp="0" Read="SecondRead" StartCycle="131" EndCycle="131" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="71" Ramp="0" Read="SecondRead" StartCycle="131" EndCycle="131" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="83" Ramp="0" Read="SecondRead" StartCycle="132" EndCycle="132" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="71" Ramp="0" Read="SecondRead" StartCycle="132" EndCycle="132" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="84" Ramp="0" Read="SecondRead" StartCycle="133" EndCycle="133" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="72" Ramp="0" Read="SecondRead" StartCycle="133" EndCycle="133" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="84" Ramp="0" Read="SecondRead" StartCycle="134" EndCycle="134" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="72" Ramp="0" Read="SecondRead" StartCycle="134" EndCycle="134" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="85" Ramp="0" Read="SecondRead" StartCycle="135" EndCycle="135" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="72" Ramp="0" Read="SecondRead" StartCycle="135" EndCycle="135" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="85" Ramp="0" Read="SecondRead" StartCycle="136" EndCycle="136" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="73" Ramp="0" Read="SecondRead" StartCycle="136" EndCycle="136" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="86" Ramp="0" Read="SecondRead" StartCycle="137" EndCycle="137" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="73" Ramp="0" Read="SecondRead" StartCycle="137" EndCycle="137" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="87" Ramp="0" Read="SecondRead" StartCycle="138" EndCycle="138" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="74" Ramp="0" Read="SecondRead" StartCycle="138" EndCycle="138" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="87" Ramp="0" Read="SecondRead" StartCycle="139" EndCycle="139" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="74" Ramp="0" Read="SecondRead" StartCycle="139" EndCycle="139" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="88" Ramp="0" Read="SecondRead" StartCycle="140" EndCycle="140" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="75" Ramp="0" Read="SecondRead" StartCycle="140" EndCycle="140" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="88" Ramp="0" Read="SecondRead" StartCycle="141" EndCycle="141" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="75" Ramp="0" Read="SecondRead" StartCycle="141" EndCycle="141" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="89" Ramp="0" Read="SecondRead" StartCycle="142" EndCycle="142" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="76" Ramp="0" Read="SecondRead" StartCycle="142" EndCycle="142" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="90" Ramp="0" Read="SecondRead" StartCycle="143" EndCycle="143" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="76" Ramp="0" Read="SecondRead" StartCycle="143" EndCycle="143" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="90" Ramp="0" Read="SecondRead" StartCycle="144" EndCycle="144" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="76" Ramp="0" Read="SecondRead" StartCycle="144" EndCycle="144" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="91" Ramp="0" Read="SecondRead" StartCycle="145" EndCycle="145" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="77" Ramp="0" Read="SecondRead" StartCycle="145" EndCycle="145" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="91" Ramp="0" Read="SecondRead" StartCycle="146" EndCycle="146" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="77" Ramp="0" Read="SecondRead" StartCycle="146" EndCycle="146" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="92" Ramp="0" Read="SecondRead" StartCycle="147" EndCycle="147" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="78" Ramp="0" Read="SecondRead" StartCycle="147" EndCycle="147" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="93" Ramp="0" Read="SecondRead" StartCycle="148" EndCycle="148" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="78" Ramp="0" Read="SecondRead" StartCycle="148" EndCycle="148" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="93" Ramp="0" Read="SecondRead" StartCycle="149" EndCycle="149" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="79" Ramp="0" Read="SecondRead" StartCycle="149" EndCycle="149" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="94" Ramp="0" Read="SecondRead" StartCycle="150" EndCycle="150" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="79" Ramp="0" Read="SecondRead" StartCycle="150" EndCycle="150" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="95" Ramp="0" Read="SecondRead" StartCycle="151" EndCycle="151" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="green" Start="80" Ramp="0" Read="SecondRead" StartCycle="151" EndCycle="151" StartTile="1" EndTile="12" NumberOfImages="7" />
    <Exposure Name="red" Start="90" Ramp="0" Read="FirstRead SecondRead" StartCycle="152" EndCycle="999" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="76" Ramp="0" Read="FirstRead SecondRead" StartCycle="152" EndCycle="999" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="50" Ramp="0" Read="IndexRead1" StartCycle="1" EndCycle="20" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="47" Ramp="0" Read="IndexRead1" StartCycle="1" EndCycle="20" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="red" Start="50" Ramp="0" Read="IndexRead2" StartCycle="1" EndCycle="20" StartTile="1" EndTile="12" NumberOfImages="5" />
    <Exposure Name="green" Start="47" Ramp="0" Read="IndexRead2" StartCycle="1" EndCycle="20" StartTile="1" EndTile="12" NumberOfImages="5" />
  </Exposures>
  <Name>NextSeq High</Name>
</Recipe>